acquisition:
  metadata:
    driver: voxel.metadata.metadata_class
    module: MetadataClass
    init:
      metadata_dictionary:
        instrument_type: exaspim
        subject_id: 123456
        experimenter_name: adam glaser
        immersion_medium: 0.05X SSC
        immersion_medium_refractive_index: 1.33
        x_anatomical_direction: Anterior_to_posterior
        y_anatomical_direction: Inferior_to_superior
        z_anatomical_direction: Left_to_right
      date_format: year/month/day/hour/minute/second
      name_specs:
        deliminator: _
        format: [ instrument_type, subject_id ]
  operations:
    vp-151mx:
      imaris:
        type: writer
        driver: voxel.writers.imaris
        module: Writer
        init:
          path: E:\local_test
        settings:
          compression: lz4shuffle
          data_type: uint16
      robocopy:
        type: transfer
        driver: voxel.transfers.robocopy
        module: FileTransfer
        init:
          external_path: E:\external_test
          local_path: E:\local_test
        settings:
          verify_transfer: True
          max_retry: 3
          timeout_s: 60
#      max_projection:
#        type: process
#        driver: voxel.processes.cpu.max_projection
#        module: MaxProjection
#        init:
#          path: E:\local_test
#        settings:
#          data_type: uint16
#          x_projection_count_px: 3548
#          y_projection_count_px: 2660
#          z_projection_count_px: 40
#      background_collection:
#        type: routine
#        driver: voxel.routines.background_collection
#        module: BackgroundCollection
#        init:
#          path: E:\local_test
#        settings:
#          data_type: uint16
#          frame_count_px: 10
  tiles: []
