acquisition:
  metadata:
    driver: voxel.metadata.metadata_class
    module: MetadataClass
    init:
      metadata_dictionary:
        instrument_type: exaspim
        subject_id: 123456
        experimenter_name: adam glaser
        immersion_medium: 0.05X SSC
        immersion_medium_refractive_index: 1.33
        x_anatomical_direction: Anterior_to_posterior
        y_anatomical_direction: Inferior_to_superior
        z_anatomical_direction: Left_to_right
      date_format: Year/Month/Day/Hour/Minute/Second
      name_specs:
        deliminator: _
        format: [ instrument_type, subject_id ]
  operations:
    vp-151mx:
      imaris:
        type: writer
        driver: voxel.writers.imaris
        module: Writer
        init:
          path: E:\\
        properties:
          compression: lz4shuffle
          data_type: uint16
      robocopy:
        type: transfer
        driver: voxel.transfers.robocopy
        module: FileTransfer
        init:
          external_path: Z:\\scratch\\adam.glaser
          local_path: E:\\
        properties:
          verify_transfer: True
          max_retry: 3
          timeout_s: 60
      max_projection:
        type: process
        driver: voxel.processes.cpu.max_projection
        module: MaxProjection
        init:
          path: E:\\
        properties:
          data_type: uint16
          z_projection_count_px: 2048
      background_collection:
        type: routine
        driver: voxel.routines.background_collection
        module: BackgroundCollection
        init:
          path: E:\\
        properties:
          data_type: uint16
          frame_count_px: 10
  tiles:
    - tile_number: 0
      position_mm:
        x: 0
        y: 0
        z: 0
      step_size: 8.000
      binning: 8
      prefix: tile
      steps: 3584
      channel: '639'
      power_mw: 1000
    - tile_number: 1
      position_mm:
        x: 0
        y: 0
        z: 0
      step_size: 1.000
      binning: 1
      prefix: tile
      steps: 28672
      channel: '488'
      power_mw: 1000
    - tile_number: 2
      position_mm:
        x: 1
        y: 1
        z: 1
      step_size: 8.000
      binning: 8
      prefix: tile
      steps: 3584
      channel: '639'
      power_mw: 1000
    - tile_number: 3
      position_mm:
        x: 1
        y: 1
        z: 1
      step_size: 1.000
      binning: 1
      prefix: tile
      steps: 28672
      channel: '488'
      power_mw: 1000
